
//////////////////////////////////////////////////////////////////////////////////////////////////////////////////
//In this macro it is preprocessed a directory of imaged using pre-computed segmentation
//////////////////////////////////////////////////////////////////////////////////////////////////////////////////

var r=0.502, roiLabel=1, thBlue=140, prominence=5, thBrown=130, minMembSize=50;

macro "GLUT Action Tool 1 - Ca3fT0b09GT6b09LTab09UTfb09T"{

	run("Close All");
	
	imgDir = getDirectory("Select the image directory");
	imgDir = replace(imgDir, "\\", "/"); 
	segDir = getDirectory("Select the segmentation directory");
	segDir = replace(segDir, "\\", "/"); 
    

	Dialog.create("Parameters for the analysis");
    
	Dialog.addNumber("Ratio micra/pixel", r);
	Dialog.addNumber("ROI label", roiLabel);
	Dialog.addNumber("Nuclei threshold", thBlue);
	Dialog.addNumber("Prominence for nuclei detection", prominence);
	Dialog.addNumber("GLUT threshold", thBrown);
	Dialog.addNumber("Min membrane size (px)", minMembSize);	
	Dialog.show();
	
	r= Dialog.getNumber();
	roiLabel= Dialog.getNumber();
	thBlue= Dialog.getNumber();
	prominence= Dialog.getNumber();	
	thBrown= Dialog.getNumber();	
	minMembSize= Dialog.getNumber();	

	print("Image Folder: " + imgDir);
	print("Segmentation Folder: " + segDir);
	
	//InDir=getDirectory("Choose a Directory");
	list=getFileList(imgDir);
	L=lengthOf(list);
	
	for (j=0; j<L; j++)
	{
		if(endsWith(list[j],"tif")){
			
			name=list[j];
			print(name);
			//setBatchMode(true);
			glut(imgDir,list[j]);
			setBatchMode(false);
			
		}
	}
	showMessage("Done!");
}


function glut(imgDir,name)
{

open(imgDir+File.separator+name);
rename(name);

roiManager("Reset");
run("Clear Results");
MyTitle=getTitle();
output=getInfo("image.directory");

OutDir = segDir+File.separator+"Quantification_results";
File.makeDirectory(OutDir);
OutDirSeg = segDir+File.separator+"Membrane_segmentations";
File.makeDirectory(OutDirSeg);

aa = split(MyTitle,".");
MyTitle_short = aa[0];

setBatchMode(true);
run("Colors...", "foreground=white background=black selection=green");


// Get marker
par=File.getParent(output);
marker = substring(output, lengthOf(par)+1, lengthOf(output)-1);
//print(marker);

// Open automatic segmentation
open(segDir+File.separator+MyTitle);
rename("label");
run("Conversions...", " ");
run("8-bit");
run("Conversions...", "scale");
run("Subtract...", "value=1");

// Create ROI area:
selectWindow("label");
run("Select Label(s)", "label(s)="+roiLabel);
setThreshold(roiLabel, 255);
run("Convert to Mask");
setThreshold(129, 255);
run("Convert to Mask");
run("Create Selection");
roiManager("Add");	// ROI0 --> ROI area
close();
selectWindow("label");
close();

// MEASURE AREA OF ROI--
run("Set Measurements...", "area redirect=None decimal=2");
selectWindow(MyTitle);
run("Select All");
roiManager("Select", 0);
roiManager("Measure");
At=getResult("Area",0);
Atm=At*r*r;
run("Clear Results");


// SEPARATE STAINING CHANNELS--

selectWindow(MyTitle);
roiManager("Show None");
run("Select All");
showStatus("Deconvolving channels...");
run("Colour Deconvolution", "vectors=[H&E DAB] hide");
selectWindow(MyTitle+"-(Colour_2)");
close();
selectWindow(MyTitle+"-(Colour_1)");
rename("blue");
selectWindow(MyTitle+"-(Colour_3)");
rename("brown");

//--SEGMENT CELLS

// Segment nuclei from hematoxylin:

selectWindow("blue");
run("Mean...", "radius=2");
run("Enhance Contrast", "saturated=0.35");
  // prominence=5
run("Find Maxima...", "prominence="+prominence+" light output=[Single Points]");
rename("blueSeeds");


selectWindow("blue");
   //thBlue = 100;
setThreshold(0, thBlue);
setOption("BlackBackground", false);
run("Convert to Mask");
run("Fill Holes");
run("Median...", "radius=1");
run("Create Selection");
selectWindow("blueSeeds");
run("Restore Selection");
setBackgroundColor(255,255,255);
run("Clear Outside");

// Segment highly stained GLUT1 areas:

selectWindow("brown");
run("Duplicate...", "title=brownMask");
  // thBrown=130;
setThreshold(0, thBrown);
setOption("BlackBackground", false);
run("Convert to Mask");
run("Open");
run("Median...", "radius=1");
run("Analyze Particles...", "size=1000-Inf pixel show=Masks in_situ");
run("Duplicate...", "title=brownDM");
selectWindow("brownMask");
run("Fill Holes");

// Detect seeds in highly stained GLUT1 areas:

selectWindow("brownDM");
run("Distance Map");
run("Find Maxima...", "prominence=0.1 output=[Single Points]");
rename("brownSeeds");
selectWindow("brownDM");
close();

// Combine blue seeds and brown seeds:

selectWindow("brownMask");
run("Create Selection");
type=selectionType();
if(type==-1) {
	makeRectangle(1,1,1,1);
}
roiManager("Add");
selectWindow("brownSeeds");
roiManager("Select", 1);
run("Clear Outside");
run("Select None");
selectWindow("blueSeeds");
roiManager("Select", 1);
run("Clear", "slice");
run("Select None");
imageCalculator("OR", "blueSeeds","brownSeeds");
selectWindow("blueSeeds");
rename("seeds");
selectWindow("brownSeeds");
close();
selectWindow("brownMask");
close();

// Keep seeds only in ROI:

selectWindow("seeds");
roiManager("Select", 0);
run("Clear Outside");
run("Select None");

// Create edges from GLUT1 staining:

selectWindow("brown");
run("Duplicate...", "title=cellEdges");
//run("Find Edges");
run("8-bit");
run("Invert");

// Create ROI mask:

selectWindow("brown");
roiManager("Select", 0);
run("Create Mask");
rename("ROIMask");

selectWindow("brown");
run("Select None");


// MARKER-CONTROLLED WATERSHED
run("Marker-controlled Watershed", "input=cellEdges marker=seeds mask=ROIMask binary calculate use");

selectWindow("cellEdges-watershed");
run("8-bit");
setThreshold(1, 255);
setOption("BlackBackground", false);
run("Convert to Mask");
run("Erode");
run("Invert");
roiManager("Select", 0);
run("Clear Outside");
run("Select None");
run("Analyze Particles...", "size="+minMembSize+"-Infinity pixel show=Masks in_situ");
run("Create Selection");
roiManager("Add");
roiManager("Select", 1);
roiManager("Delete");	// ROI1 --> Cell membrane in ROI area


// MEASURE DAB STAINING--

run("Clear Results");
selectWindow("brown");
run("Select All");
setBatchMode(true);
run("Invert");
roiManager("Select", 1);
run("Set Measurements...", "area mean standard modal min redirect=None decimal=2");
roiManager("Measure");
//Table.renameColumn("Area", "Area Membrane");
//Table.renameColumn("Mean", "Mean Intensity Membrane");
IavgMemb=getResult("Mean",0);
Amemb=getResult("Area",0);
Amembm=Amemb*r*r;
r1=(parseInt(Amembm)/parseInt(Atm))*100;

close();

// Write results:

run("Clear Results");
if(File.exists(OutDir+File.separator+"QuantificationResults.xls"))
{	
	//if exists add and modify
	open(OutDir+File.separator+"QuantificationResults.xls");
	IJ.renameResults("Results");
	
}
i=nResults;

print(i);
setResult("Label", i, MyTitle); 	
setResult("ROI area (um2)",i,Atm);
setResult("Membrane area in ROI (%)",i,r1);
setResult("Iavg membrane",i,IavgMemb);

saveAs("Results", OutDir+File.separator+"QuantificationResults.xls");	

// Draw

selectWindow(MyTitle);
setBatchMode(false);
rename("orig");
roiManager("Show None");
roiManager("Select", 1);
roiManager("Set Color", "red");
roiManager("Set Line Width", 1);
run("Flatten");
wait(100);
saveAs("Jpeg", OutDirSeg+File.separator+MyTitle_short+"_membraneSegmentation.jpg");
wait(100);



setTool("zoom");
selectWindow("orig");
close();

close("*");

}



